<?xml version="1.0"?>
<?xml-stylesheet type="text/xsl" href="tandem-style.xsl"?>
<bioml xmlns:GAML="http://www.bioml.com/gaml/" label="models from '/Users/cellzome/Dev/Gits/Ursgal/ursgal2_dev/tests/data/BSA1.mgf'">
<group label="input parameters" type="parameters">
	<note type="input" label="list path, default parameters">/Users/cellzome/Dev/Gits/Ursgal/ursgal2_dev/tests/data/xtandem_alanine/default_input.xml</note>
	<note type="input" label="list path, taxonomy information">/Users/cellzome/Dev/Gits/Ursgal/ursgal2_dev/tests/data/xtandem_alanine/taxonomy.xml</note>
	<note type="input" label="output, histogram column width">30</note>
	<note type="input" label="output, histograms">yes</note>
	<note type="input" label="output, maximum valid expectation value">1.0</note>
	<note type="input" label="output, parameters">yes</note>
	<note type="input" label="output, path">/Users/cellzome/Dev/Gits/Ursgal/ursgal2_dev/tests/data/xtandem_alanine/BSA1_xtandem_alanine.xml</note>
	<note type="input" label="output, path hashing">no</note>
	<note type="input" label="output, performance">yes</note>
	<note type="input" label="output, proteins">yes</note>
	<note type="input" label="output, results">all</note>
	<note type="input" label="output, sequences">yes</note>
	<note type="input" label="output, spectra">yes</note>
	<note type="input" label="output, xsl path">tandem-style.xsl</note>
	<note type="input" label="protein, C-terminal residue modification mass">0.0</note>
	<note type="input" label="protein, N-terminal residue modification mass">0.0</note>
	<note type="input" label="protein, cleavage C-terminal mass change">17.00305</note>
	<note type="input" label="protein, cleavage N-terminal mass change">1.00794</note>
	<note type="input" label="protein, cleavage semi">no</note>
	<note type="input" label="protein, cleavage site">[KR]|{P}</note>
	<note type="input" label="protein, modified residue mass file">no</note>
	<note type="input" label="protein, ptm complexity">6.0</note>
	<note type="input" label="protein, quick acetyl">yes</note>
	<note type="input" label="protein, quick pyrolidone">no</note>
	<note type="input" label="protein, saps">no</note>
	<note type="input" label="protein, stP bias">no</note>
	<note type="input" label="protein, taxon">all</note>
	<note type="input" label="refine">no</note>
	<note type="input" label="refine, maximum valid expectation value">0.1</note>
	<note type="input" label="refine, spectrum synthesis">no</note>
	<note type="input" label="residue, modification mass">57.021464@C</note>
	<note type="input" label="residue, potential modification mass">15.994915@M</note>
	<note type="input" label="scoring, a ions">no</note>
	<note type="input" label="scoring, b ions">yes</note>
	<note type="input" label="scoring, c ions">no</note>
	<note type="input" label="scoring, include reverse">no</note>
	<note type="input" label="scoring, maximum missed cleavage sites">2</note>
	<note type="input" label="scoring, minimum ion count">4</note>
	<note type="input" label="scoring, x ions">no</note>
	<note type="input" label="scoring, y ions">yes</note>
	<note type="input" label="scoring, z ions">no</note>
	<note type="input" label="spectrum, dynamic range">100</note>
	<note type="input" label="spectrum, fragment mass error">20</note>
	<note type="input" label="spectrum, fragment mass error units">ppm</note>
	<note type="input" label="spectrum, fragment mass type">monoisotopic</note>
	<note type="input" label="spectrum, minimum fragment mz">150</note>
	<note type="input" label="spectrum, minimum parent m+h">400</note>
	<note type="input" label="spectrum, minimum peaks">5</note>
	<note type="input" label="spectrum, parent monoisotopic mass error minus">5</note>
	<note type="input" label="spectrum, parent monoisotopic mass error plus">5</note>
	<note type="input" label="spectrum, parent monoisotopic mass error units">ppm</note>
	<note type="input" label="spectrum, parent monoisotopic mass isotope error">yes</note>
	<note type="input" label="spectrum, path">/Users/cellzome/Dev/Gits/Ursgal/ursgal2_dev/tests/data/BSA1.mgf</note>
	<note type="input" label="spectrum, sequence batch size">100000</note>
	<note type="input" label="spectrum, threads">6</note>
	<note type="input" label="spectrum, total peaks">150</note>
	<note type="input" label="spectrum, use neutral loss window">no</note>
</group>
<group label="unused input parameters"  type="parameters">
	<note type="input" label="output, mzid">no</note>
	<note type="input" label="protein, use minimal annotations">yes</note>
	<note type="input" label="refine, point mutations">no</note>
	<note type="input" label="refine, potential N-terminus modifications"></note>
	<note type="input" label="refine, potential modification mass"></note>
	<note type="input" label="refine, unanticipated cleavage">no</note>
	<note type="input" label="refine, use potential modifications for full refinement">no</note>
	<note type="input" label="scoring, cyclic permutations">no</note>
	<note type="input" label="scoring, pluggable scoring">no</note>
	<note type="input" label="spectrum, fragment monoisotopic mass error">20</note>
	<note type="input" label="spectrum, fragment monoisotopic mass error units">ppm</note>
	<note type="input" label="spectrum, neutral loss mass">0</note>
	<note type="input" label="spectrum, neutral loss window">0</note>
	<note type="input" label="spectrum, use noise suppression">no</note>
</group>
<group label="performance parameters" type="parameters">
	<note label="list path, sequence source #1">../tests/data/BSA1.fasta</note>
	<note label="list path, sequence source description #1">no description</note>
	<note label="modelling, duplicate peptide ids">0</note>
	<note label="modelling, duplicate proteins">0</note>
	<note label="modelling, total peptides used">109</note>
	<note label="modelling, total proteins used">1</note>
	<note label="modelling, total spectra used">1120</note>
	<note label="process, start time">2021:07:07:11:14:36</note>
	<note label="process, version">X! Tandem Alanine (2017.2.1.4)</note>
	<note label="quality values">0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0</note>
	<note label="refining, # input models">0</note>
	<note label="refining, # input spectra">0</note>
	<note label="refining, # partial cleavage">0</note>
	<note label="refining, # point mutations">0</note>
	<note label="refining, # potential C-terminii">0</note>
	<note label="refining, # potential N-terminii">0</note>
	<note label="refining, # unanticipated cleavage">0</note>
	<note label="timing, initial modelling total (sec)">0.00</note>
	<note label="timing, initial modelling/spectrum (sec)">0.0000</note>
	<note label="timing, load sequence models (sec)">0.00</note>
	<note label="timing, refinement/spectrum (sec)">0.0000</note>
</group>
</bioml>
